<?xml version='1.0' encoding='UTF-8'?>
<model xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns="http://www.cellml.org/cellml/1.0#" name="ideal_voltage_clamp_ikr">
  <units name="C_per_mol">
    <unit units="second"/>
    <unit units="ampere"/>
    <unit units="mole" exponent="-1"/>
  </units>
  <units name="J_per_mol_per_K">
    <unit units="gram" multiplier="1000"/>
    <unit units="metre" exponent="2"/>
    <unit units="second" exponent="-2"/>
    <unit units="kelvin" exponent="-1"/>
    <unit units="mole" exponent="-1"/>
  </units>
  <units name="mM">
    <unit units="metre" exponent="-3"/>
    <unit units="mole"/>
  </units>
  <units name="mS_per_uF">
    <unit units="second" exponent="-1" multiplier="1000"/>
  </units>
  <units name="mV">
    <unit units="gram"/>
    <unit units="metre" exponent="2"/>
    <unit units="second" exponent="-3"/>
    <unit units="ampere" exponent="-1"/>
  </units>
  <units name="ms">
    <unit units="second" multiplier="0.001"/>
  </units>
  <units name="nS">
    <unit units="gram" exponent="-1" multiplier="1e-12"/>
    <unit units="metre" exponent="-2"/>
    <unit units="second" exponent="3"/>
    <unit units="ampere" exponent="2"/>
  </units>
  <units name="pA">
    <unit units="ampere" multiplier="1e-12"/>
  </units>
  <units name="per_mV">
    <unit units="gram" exponent="-1"/>
    <unit units="metre" exponent="-2"/>
    <unit units="second" exponent="3"/>
    <unit units="ampere"/>
  </units>
  <component name="engine">
    <variable name="pace" units="dimensionless" public_interface="out" initial_value="0.0"/>
    <variable name="time" units="ms" public_interface="out"/>
  </component>
  <component name="ikr">
    <variable name="EK" units="mV" public_interface="in"/>
    <variable name="IKr" units="mV" public_interface="out"/>
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="active" units="dimensionless" initial_value="1.0"/>
    <variable name="g" units="nS"/>
    <variable name="ikr_active_inf" units="dimensionless"/>
    <variable name="ikr_active_tau" units="dimensionless"/>
    <variable name="ikr_open_inf" units="dimensionless"/>
    <variable name="ikr_open_tau" units="dimensionless"/>
    <variable name="k1" units="dimensionless"/>
    <variable name="k2" units="dimensionless"/>
    <variable name="k3" units="dimensionless"/>
    <variable name="k4" units="dimensionless"/>
    <variable name="open" units="dimensionless" initial_value="0.0"/>
    <variable name="p1" units="mS_per_uF" initial_value="0.000226"/>
    <variable name="p2" units="per_mV" initial_value="0.0699"/>
    <variable name="p3" units="mS_per_uF" initial_value="3.45e-05"/>
    <variable name="p4" units="per_mV" initial_value="0.05462"/>
    <variable name="p5" units="mS_per_uF" initial_value="0.0873"/>
    <variable name="p6" units="per_mV" initial_value="0.00891"/>
    <variable name="p7" units="mS_per_uF" initial_value="0.00515"/>
    <variable name="p8" units="per_mV" initial_value="0.03158"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>IKr</ci>
        <apply>
          <times/>
          <apply>
            <times/>
            <apply>
              <times/>
              <ci>g</ci>
              <ci>open</ci>
            </apply>
            <ci>active</ci>
          </apply>
          <apply>
            <minus/>
            <ci>V</ci>
            <ci>EK</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>active</ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>ikr_active_inf</ci>
            <ci>active</ci>
          </apply>
          <ci>ikr_active_tau</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>g</ci>
        <apply>
          <times/>
          <cn cellml:units="dimensionless">0.1524</cn>
          <cn cellml:units="nS">1000.0</cn>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>ikr_active_inf</ci>
        <apply>
          <times/>
          <ci>k4</ci>
          <ci>ikr_active_tau</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>ikr_active_tau</ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless">1.0</cn>
          <apply>
            <plus/>
            <ci>k3</ci>
            <ci>k4</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>ikr_open_inf</ci>
        <apply>
          <times/>
          <ci>k1</ci>
          <ci>ikr_open_tau</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>ikr_open_tau</ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless">1.0</cn>
          <apply>
            <plus/>
            <ci>k1</ci>
            <ci>k2</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>k1</ci>
        <apply>
          <times/>
          <ci>p1</ci>
          <apply>
            <exp/>
            <apply>
              <times/>
              <ci>p2</ci>
              <ci>V</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>k2</ci>
        <apply>
          <times/>
          <ci>p3</ci>
          <apply>
            <exp/>
            <apply>
              <times/>
              <apply>
                <minus/>
                <ci>p4</ci>
              </apply>
              <ci>V</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>k3</ci>
        <apply>
          <times/>
          <ci>p5</ci>
          <apply>
            <exp/>
            <apply>
              <times/>
              <ci>p6</ci>
              <ci>V</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>k4</ci>
        <apply>
          <times/>
          <ci>p7</ci>
          <apply>
            <exp/>
            <apply>
              <times/>
              <apply>
                <minus/>
                <ci>p8</ci>
              </apply>
              <ci>V</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>open</ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>ikr_open_inf</ci>
            <ci>open</ci>
          </apply>
          <ci>ikr_open_tau</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="membrane">
    <variable name="V" units="mV" public_interface="out"/>
    <variable name="Vp" units="mV" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>V</ci>
        <ci>Vp</ci>
      </apply>
    </math>
  </component>
  <component name="phys">
    <variable name="F" units="C_per_mol" initial_value=" 9.64853414999999950e+04"/>
    <variable name="R" units="J_per_mol_per_K" initial_value="8.314472"/>
    <variable name="RTF" units="mV" public_interface="out"/>
    <variable name="T" units="kelvin" initial_value="310.0"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>RTF</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>R</ci>
              <ci>T</ci>
            </apply>
            <ci>F</ci>
          </apply>
          <cn cellml:units="dimensionless">1000.0</cn>
        </apply>
      </apply>
    </math>
  </component>
  <component name="potassium">
    <variable name="Ki" units="mM" public_interface="out" initial_value="110.0"/>
    <variable name="Ko" units="mM" public_interface="out" initial_value="4.0"/>
  </component>
  <component name="rev">
    <variable name="EK" units="mV" public_interface="out"/>
    <variable name="Ki" units="dimensionless" public_interface="in"/>
    <variable name="Ko" units="dimensionless" public_interface="in"/>
    <variable name="RTF" units="mV" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>EK</ci>
        <apply>
          <times/>
          <ci>RTF</ci>
          <apply>
            <ln/>
            <apply>
              <divide/>
              <ci>Ko</ci>
              <ci>Ki</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="voltageclamp">
    <variable name="IKr" units="dimensionless" public_interface="in"/>
    <variable name="Iin" units="pA"/>
    <variable name="Vc" units="mV"/>
    <variable name="Vp" units="mV" public_interface="out"/>
    <variable name="pace" units="dimensionless" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Iin</ci>
        <ci>IKr</ci>
      </apply>
      <apply>
        <eq/>
        <ci>Vc</ci>
        <ci>pace</ci>
      </apply>
      <apply>
        <eq/>
        <ci>Vp</ci>
        <ci>Vc</ci>
      </apply>
    </math>
  </component>
  <connection>
    <map_components component_1="engine" component_2="ikr"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="engine" component_2="voltageclamp"/>
    <map_variables variable_1="pace" variable_2="pace"/>
  </connection>
  <connection>
    <map_components component_1="ikr" component_2="membrane"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="ikr" component_2="rev"/>
    <map_variables variable_1="EK" variable_2="EK"/>
  </connection>
  <connection>
    <map_components component_1="ikr" component_2="voltageclamp"/>
    <map_variables variable_1="IKr" variable_2="IKr"/>
  </connection>
  <connection>
    <map_components component_1="membrane" component_2="voltageclamp"/>
    <map_variables variable_1="Vp" variable_2="Vp"/>
  </connection>
  <connection>
    <map_components component_1="phys" component_2="rev"/>
    <map_variables variable_1="RTF" variable_2="RTF"/>
  </connection>
  <connection>
    <map_components component_1="potassium" component_2="rev"/>
    <map_variables variable_1="Ki" variable_2="Ki"/>
    <map_variables variable_1="Ko" variable_2="Ko"/>
  </connection>
</model>
